CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Try: ', '', 'MeanFilterIntensity', 'IntegratedIntensity', 'Regularization Factor', '']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:["I decided to filter via this module- so I don't waste in time loading in images -> this also goes the fastest combined with first filter- first load everything, without filters, then turn them on and it'll go much faster."]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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:DAPI
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:DAPI
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Center overlapping staining not great + corners are way too dim to provide anything relevant. ', '', 'Can also try making the intensity flexible and then filter based on size + can make size flexible.']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
    Select the input image:OrigBlue
    Name the primary objects to be identified:PossibleNuclei
    Typical diameter of objects, in pixel units (Min,Max):10,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:.05,1
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:7|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
    Select images to measure:OrigGreen
    Select objects to measure:PossibleNuclei

FilterObjects:[module_num:8|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
    Select the objects to filter:PossibleNuclei
    Name the output objects:TrueNuclei1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_OrigGreen
    Filter using a minimum measurement value?:Yes
    Minimum value:40
    Filter using a maximum measurement value?:No
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
IdentifySecondaryObjects:[module_num:9|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notes:['rFigure out how to measure dendritic complexity + add more complexities based on what you think is good or useful ']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
    Select the input objects:TrueNuclei1
    Name the objects to be identified:PossibleMicroglia
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:OrigGreen
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:PossibleMicroglia, PossibleNuclei, TrueNuclei1
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:11|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
    Select images to measure:OrigGreen, OrigRed
    Select objects to measure:PossibleMicroglia, TrueNuclei1

DisplayDataOnImage:[module_num:12|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
    Display object or image measurements?:Object
    Select the input objects:PossibleMicroglia
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OrigGreen
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Times New Roman
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:13|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
    Display object or image measurements?:Object
    Select the input objects:TrueNuclei1
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OrigBlue
    Text color:#000080
    Name the output image that has the measurements displayed:DisplayImage2
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Times New Roman
    Use scientific notation?:No
    Font weight:normal

FilterObjects:[module_num:14|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
    Select the objects to filter:PossibleMicroglia
    Name the output objects:TrueMicroglia
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:1
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:500
    Filter using a maximum measurement value?:Yes
    Maximum value:20000
    Select additional object to relabel:TrueNuclei1
    Name the relabeled objects:TrueNuclei
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
MeasureObjectIntensity:[module_num:15|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
    Select images to measure:OrigGreen, OrigRed
    Select objects to measure:TrueMicroglia, TrueNuclei

MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:TrueMicroglia, TrueNuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigGreen
    Name the output image:MicrogliaIImage
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:green
    Select objects to display:TrueMicroglia

OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigBlue
    Name the output image:NucleiImage
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:blue
    Select objects to display:TrueNuclei

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage2
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|C:\\pythonProject\\HebertLabKM\\Training\\ProcessedImages\\NucleiNumbered
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:NucleiImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|C:\\pythonProject\\HebertLabKM\\Training\\ProcessedImages\\NucleiImages
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:MicrogliaIImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|C:\\pythonProject\\HebertLabKM\\Training\\ProcessedImages\\MicroglialImages
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|C:\\pythonProject\\HebertLabKM\\Training\\ProcessedImages\\MicoglialNumbered
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
